PsychoPy2experiment version="3.0.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = color_mds
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Routines
  Routine trial
    ImageComponent image
      image [set every repeat] = $color1a
      pos = (-.25, .25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    ImageComponent image_2
      image [set every repeat] = $color2a
      pos = (.25, .25)
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      pos = (0, -0.3)
      size = (.8, 0.1)
      startVal [time (s)] = 0.0
      styles = ('rating',)
      ticks = (1, 2, 3, 4, 5,6,7)
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    TextComponent text
      color = black
      letterHeight = 0.05
      pos = (0, -.15)
      startVal [time (s)] = 0.0
      text = Most similar  -  Least Similar
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AllColor.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('color1', 'red'), ('color2', 'red'), ('color1a', 'red.png'), ('color2a', 'red.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'orange'), ('color1a', 'red.png'), ('color2a', 'orange.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'yellow'), ('color1a', 'red.png'), ('color2a', 'yellow.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'chartrueuse_green'), ('color1a', 'red.png'), ('color2a', 'chartrueuse_green.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'green'), ('color1a', 'red.png'), ('color2a', 'green.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'spring_green'), ('color1a', 'red.png'), ('color2a', 'spring_green.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'cyan'), ('color1a', 'red.png'), ('color2a', 'cyan.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'azure'), ('color1a', 'red.png'), ('color2a', 'azure.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'blue'), ('color1a', 'red.png'), ('color2a', 'blue.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'violet'), ('color1a', 'red.png'), ('color2a', 'violet.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'magenta'), ('color1a', 'red.png'), ('color2a', 'magenta.png')]),
      OrderedDict([('color1', 'red'), ('color2', 'rose'), ('color1a', 'red.png'), ('color2a', 'rose.png')]),
      OrderedDict([('color1', 'orange'), ('color2', 'red'), ('color1a', 'orange.png'), ('color2a', 'red.png')]),
      OrderedDict([('color1', 'orange'), ('color2', 'orange'), ('color1a', 'orange.png'), ('color2a', 'orange.png')])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
    Routine trial
  LoopTerminator trials
